PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine IntroText
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    TextComponent intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to BRIDGE!

        This is PsychoPy
    KeyboardComponent adv_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Encoding
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    ImageComponent encoding_image
      image [set every repeat] = $'stim/'+animal_image
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    SoundComponent encoding_audio
      saveStartStop = False
      sound [set every repeat] = $'stim/'+question_audio
      speakerIndex = 4.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      volume = 10
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    TextComponent encoding_text
      letterHeight = 0.08
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $animal_name
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  Routine FactTest
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    ImageComponent facttest_image
      image [set every repeat] = $'stim/'+animal_image
      pos = (0, .2)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent facttest_question
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $question
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    TextComponent facttest_options
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $letter_a + choice_a + '\n' + letter_b + choice_b
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    KeyboardComponent facttest_response
      allowedKeys = 'a','b'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine SourceTest
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    TextComponent source_text
      color [set every repeat] = white
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Did a male or female voice tell you this fact?

        a. Male
        b. Female
    KeyboardComponent source_response
      allowedKeys = 'a','b'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Each Frame:
        # Check if a response has been made
        if source_response.keys:
            if (source_response.keys == str(correct_answer)) or (source_response.keys == correct_answer):
                feedback_text.setColor('green')  # Correct answer
                feedback_text.setText('Correct')  # Update feedback text
            else:
                feedback_text.setColor('red')  # Incorrect answer
                feedback_text.setText('Incorrect')  # Update feedback text
        else:
            feedback_text.setColor('red')  # Incorrect answer
            feedback_text.setText('Time out!')  # Update feedback text
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 5
      text [set every repeat] = $feedback_text
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  Routine Exit
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thanks for participating!

        Click the space bar to quit.
    KeyboardComponent exit_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  Routine IntroText
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim/stim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'Mammal'), ('animal_name', 'Polar Bear'), ('source', 'male'), ('source_answer', 'a'), ('animal_image', 'polarbear.jpg'), ('fact', 'Polar bears can smell a seal breathing hole in the ice from one kilometer away.'), ('question_audio', 'polarbear.aiff'), ('question', 'What can a polar bear smell from one kilometer away?'), ('letter_a', 'a.'), ('choice_a', 'A seal breathing hole'), ('letter_b', 'b.'), ('choice_b', 'An elk carcass'), ('correct_answer', 'a')]),
      OrderedDict([('type', 'Bird'), ('animal_name', 'Toucan'), ('source', 'female'), ('source_answer', 'b'), ('animal_image', 'toucan.jpg'), ('fact', 'Toucans regulate their body temperature by adjusting bloodflow to their beaks.'), ('question_audio', 'toucan.aiff'), ('question', 'How do toucans regulate their body temperature?'), ('letter_a', 'a.'), ('choice_a', 'Opening their mouths, similar to panting'), ('letter_b', 'b.'), ('choice_b', 'Adjusting bloodflow to their beaks'), ('correct_answer', 'b')]),
      OrderedDict([('type', 'Marine animal'), ('animal_name', 'Clownfish'), ('source', 'female'), ('source_answer', 'b'), ('animal_image', 'clownfish.jpg'), ('fact', 'The largest female clownfish is at the top of its group hierarchy.'), ('question_audio', 'clownfish.aiff'), ('question', "What clownfish is at the top of its group's hierarchy?"), ('letter_a', 'a.'), ('choice_a', 'The oldest female'), ('letter_b', 'b.'), ('choice_b', 'The largest female'), ('correct_answer', 'b')]),
      OrderedDict([('type', 'Insect'), ('animal_name', 'Woolly Bear Caterpillar'), ('source', 'male'), ('source_answer', 'a'), ('animal_image', 'woollybearcaterpillar.jpg'), ('fact', 'The woolly bear caterpillar is resistant to freezing.'), ('question_audio', 'woollybearcaterpillar.aiff'), ('question', 'What are woolly bear caterpillars resistant to?'), ('letter_a', 'a.'), ('choice_a', 'Freezing'), ('letter_b', 'b.'), ('choice_b', 'Overheating'), ('correct_answer', 'a')])]
    Routine Encoding
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stim/stim.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine FactTest
    Routine SourceTest
  LoopTerminator trials_2
  Routine Exit
