PsychoPy2experiment version="2026.2.5"
Settings
  Audio lib = ptb
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Enable Escape = False
  Experiment info = {'participant': '000'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = [-0.5, -0.5, -0.5]
  expName = BRIDGE visual discrimination
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    CodeComponent instructions_input
      Code Type = Py
      Begin Experiment:
        from run_support import Session
      Begin Routine:
        session = Session(win, int(expInfo["participant"]))
        instructions_text.text = "Report the tilt: left or right.\n" + "Left = " + session.hardware["response_keys"][int(expInfo["participant"])%2] + "; right = " + session.hardware["response_keys"][(1+int(expInfo["participant"])%2)%2] + "\n\nPress Space when ready. Escape stops the experiment."
      Each Frame:
        session.poll()
        continueRoutine = session.state.phase == 'ready'
      End Experiment:
        session.save()
      End Routine:
        grating.draw()
        win.clearBuffer()
    TextComponent instructions_text
      letterHeight = 0.035
      startVal [time (s)] = 0
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      text:
        Report the tilt: left or right.

        Press Space when ready.
        Escape stops the experiment.
  Routine scanner_start
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    CodeComponent scanner_start_input
      Code Type = Py
      Each Frame:
        session.poll()
        continueRoutine = session.state.zero is None or baseline_fixation.tStartRefresh is None
    TextComponent scanner_start_text
      letterHeight = 0.035
      startVal [condition] = session.state.zero is None
      stopVal [condition] = session.state.zero is not None
      text = Waiting for scanner
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    TextComponent baseline_fixation
      letterHeight = 0.04
      startVal [condition] = session.state.zero is not None
      text = +
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  Routine trial
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    CodeComponent trial_input
      Code Type = Py
      Begin Routine:
        session.begin_trial(thisTrial["trial"], grating)
      Each Frame:
        session.poll()
        continueRoutine = session.next_time() < planned_onset + interval_s
      End Routine:
        session.capture_flips()
    TextComponent trial_text
      letterHeight = 0.035
      startVal [time (s)] = 0
      text = +
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    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = gauss
      ori [set every repeat] = orientation
      sf [set every repeat] = session.spec["grating_cycles"]/session.spec["grating_size_height"]
      size [set every repeat] = $session.spec["grating_size_height"]
      startVal [condition] = session.next_time() >= planned_onset
      stopVal [condition] = session.next_time() >= planned_onset + duration
      tex = sin
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  Routine final_fixation
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    CodeComponent final_fixation_input
      Code Type = Py
      Each Frame:
        session.poll()
        continueRoutine = session.next_time() < session.end
      End Routine:
        session.complete()
    TextComponent final_fixation_text
      letterHeight = 0.035
      startVal [time (s)] = 0
      text = +
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  Routine thanks
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    CodeComponent thanks_input
      Code Type = Py
      Each Frame:
        session.poll()
        continueRoutine = t < 2
    TextComponent thanks_text
      letterHeight = 0.035
      startVal [time (s)] = 0
      text = Thank you
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Flow
  Routine instructions
  Routine scanner_start
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = $str(session.out / "schedule.tsv")
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine final_fixation
  Routine thanks
